PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = IAT(test)
  frameRateMsg = Please wait for a moment...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Practice
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  Routine Instruction_Total
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    TextComponent Instruction_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        指导语：

        您好，欢迎参加本次实验。
        在本次实验中，您需要根据不同的规则按下相应的键进行分类。
        请保持专注，并尽量快速、准确地完成每个任务。
        具体指导将在每个步骤开始前详细说明。
        请您尽可能认真地作答，我们将依据您在各问卷和按键任务中的
        作答质量发放报酬。

                                    理解后按 空格 开始实验
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        Instruction_begin.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        Instruction_begin.setAlignHoriz('left')
  Routine Exp1
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    TextComponent Instructtion01
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        指导语：

            在接下来的任务中，您将看到一系列代表自我和他者的概念词。
        当您看到自我概念词时，请按“E”键；当您看到他者概念词时，请
        按“I”键。请尽量快速、准确地作答。

                                   理解后按 空格 开始实验
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        Instructtion01.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        Instructtion01.setAlignHoriz('left')
Flow
  Routine Instruction_Total
  Routine Exp1
  Routine Practice
