PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  expName = IAT(test02)
  frameRateMsg = Please wait for a moment...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction01
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    ImageComponent Instruction_01
      image = picture/Instruction01.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Instruction1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction02
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    ImageComponent Instruction_02
      image = picture/Instruction02.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Instruction2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction03
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    ImageComponent Instruction_03
      image = picture/Instruction03.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction04
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    ImageComponent Instruction_04
      image = picture/Instruction04.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction05
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    ImageComponent Instruction_05
      image = picture/Instruction05.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction06
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    ImageComponent Instruction_06
      image = picture/Instruction06.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction07
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    ImageComponent Instruction_07
      image = picture/Instruction07.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction08
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  Routine Fix
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_iso
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    TextComponent text
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_iso_Practice
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = '正确'
                fb_col = 'green'
            else:
                fb_text = '错误'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practic_ipn
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $Words_ipn
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    KeyboardComponent key_resp_2
      allowedKeys = 'e','i'
      correctAns = $ans_ipn
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_ipn_Practice
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    CodeComponent fb_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_2.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_3
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine Instruction01
  Routine Instruction02
  LoopInitiator Practice_01 loopType="TrialHandler"
    conditionsFile = Loop/Practice_iso.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': '我', 'ans': 'e'},
      {'Words': '我的', 'ans': 'e'},
      {'Words': '我们', 'ans': 'e'},
      {'Words': '自己', 'ans': 'e'},
      {'Words': '俺', 'ans': 'e'},
      {'Words': '他', 'ans': 'i'},
      {'Words': '他们', 'ans': 'i'},
      {'Words': '他的', 'ans': 'i'},
      {'Words': '他人', 'ans': 'i'},
      {'Words': '其他', 'ans': 'i'}]
    Routine Fix
    Routine Practice_iso
    Routine Feedback_iso_Practice
  LoopTerminator Practice_01
  Routine Instruction03
  Routine Instruction04
  Routine Instruction05
  Routine Instruction06
  Routine Instruction07
  Routine Instruction08
