PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  expName = IAT(test05)
  frameRateMsg = Please wait for a moment...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction01
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    ImageComponent Instruction_01
      image = picture/Instruction01.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Instruction1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction02
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    ImageComponent Instruction_02
      image = picture/Instruction02.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Instruction2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction03
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    ImageComponent Instruction_03
      image = picture/Instruction03.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction04
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    ImageComponent Instruction_04
      image = picture/Instruction04.png
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction05
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    ImageComponent Instruction_05
      image = picture/Instruction05.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction06
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    ImageComponent Instruction_06
      image = picture/Instruction06.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction07
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    ImageComponent Instruction_07
      image = picture/Instruction07.png
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction08
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  Routine Fix
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_iso
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    TextComponent text
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words
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    KeyboardComponent key_resp_iso
      allowedKeys = 'e','i'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_iso_Practice
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_iso.corr:
                fb_text = '正确！'
                fb_col = 'green'
            else:
                fb_text = '错误'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practic_ipn
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words_ipn
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    KeyboardComponent key_resp_ipn
      allowedKeys = 'e','i'
      correctAns = $ans_ipn
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_ipn_Practice
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    CodeComponent fb_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_ipn.corr:
                fb_text = '正确！'
                fb_col = 'green'
            else:
                fb_text = '错误'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_3
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practice_t1
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words_t1
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    KeyboardComponent key_resp_t1
      allowedKeys = 'e','i'
      correctAns = $ans_t1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_t1
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    CodeComponent fb_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_t1.corr:
                fb_text = '正确！'
                fb_col = 'green'
            else:
                fb_text = '错误'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practice_iso_reverse
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words
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    KeyboardComponent key_resp_iso_reverse
      allowedKeys = 'e','i'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_iso_reverse
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    CodeComponent fb_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_iso_reverse.corr:
                fb_text = '正确！'
                fb_col = 'green'
            else:
                fb_text = '错误'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_4
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Feedback_ipn_reverse
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    CodeComponent fb_code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_t2_reverse.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_5
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practice_t2
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words_t2
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    KeyboardComponent key_resp_t2
      allowedKeys = 'e','i'
      correctAns = $ans_t2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Feedback_t2
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    CodeComponent fb_code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp_t2.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb_6
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Practice_t2_reverse
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Words_ipn
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    KeyboardComponent key_resp_t2_reverse
      allowedKeys = 'e','i'
      correctAns = $ans_ipn
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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Flow
  Routine Instruction01
  Routine Instruction02
  LoopInitiator Practice_01 loopType="TrialHandler"
    conditionsFile = Loop/Practice_iso.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': '我', 'ans': 'e'},
      {'Words': '我的', 'ans': 'e'},
      {'Words': '我们', 'ans': 'e'},
      {'Words': '自己', 'ans': 'e'},
      {'Words': '俺', 'ans': 'e'},
      {'Words': '他', 'ans': 'i'},
      {'Words': '他们', 'ans': 'i'},
      {'Words': '他的', 'ans': 'i'},
      {'Words': '他人', 'ans': 'i'},
      {'Words': '其他', 'ans': 'i'}]
    Routine Fix
    Routine Practice_iso
    Routine Feedback_iso_Practice
  LoopTerminator Practice_01
  Routine Instruction03
  LoopInitiator Practice_02 loopType="TrialHandler"
    conditionsFile = Loop/Practice_ipn.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_ipn': '优秀', 'ans_ipn': 'e'},
      {'Words_ipn': '崇高', 'ans_ipn': 'e'},
      {'Words_ipn': '出门', 'ans_ipn': 'e'},
      {'Words_ipn': '杰出', 'ans_ipn': 'e'},
      {'Words_ipn': '乐观', 'ans_ipn': 'e'},
      {'Words_ipn': '诚实', 'ans_ipn': 'e'},
      {'Words_ipn': '正直', 'ans_ipn': 'e'},
      {'Words_ipn': '勇敢', 'ans_ipn': 'e'},
      {'Words_ipn': '勤奋', 'ans_ipn': 'e'},
      {'Words_ipn': '机智', 'ans_ipn': 'e'},
      {'Words_ipn': '认真', 'ans_ipn': 'e'},
      {'Words_ipn': '稳重', 'ans_ipn': 'e'},
      {'Words_ipn': '无私', 'ans_ipn': 'e'},
      {'Words_ipn': '公正', 'ans_ipn': 'e'},
      {'Words_ipn': '朴实', 'ans_ipn': 'e'},
      {'Words_ipn': '细腻', 'ans_ipn': 'e'},
      {'Words_ipn': '冷静', 'ans_ipn': 'e'},
      {'Words_ipn': '热情', 'ans_ipn': 'e'},
      {'Words_ipn': '活泼', 'ans_ipn': 'e'},
      {'Words_ipn': '诚恳', 'ans_ipn': 'e'},
      {'Words_ipn': '卑鄙', 'ans_ipn': 'i'},
      {'Words_ipn': '虚伪', 'ans_ipn': 'i'},
      {'Words_ipn': '愚蠢', 'ans_ipn': 'i'},
      {'Words_ipn': '刻薄', 'ans_ipn': 'i'},
      {'Words_ipn': '悲观', 'ans_ipn': 'i'},
      {'Words_ipn': '消极', 'ans_ipn': 'i'},
      {'Words_ipn': '自卑', 'ans_ipn': 'i'},
      {'Words_ipn': '傲慢', 'ans_ipn': 'i'},
      {'Words_ipn': '鲁莽', 'ans_ipn': 'i'},
      {'Words_ipn': '冒失', 'ans_ipn': 'i'},
      {'Words_ipn': '执拗', 'ans_ipn': 'i'},
      {'Words_ipn': '散漫', 'ans_ipn': 'i'},
      {'Words_ipn': '凶狠', 'ans_ipn': 'i'},
      {'Words_ipn': '自私', 'ans_ipn': 'i'},
      {'Words_ipn': '暴躁', 'ans_ipn': 'i'},
      {'Words_ipn': '猖狂', 'ans_ipn': 'i'},
      {'Words_ipn': '野蛮', 'ans_ipn': 'i'},
      {'Words_ipn': '固执', 'ans_ipn': 'i'},
      {'Words_ipn': '轻率', 'ans_ipn': 'i'},
      {'Words_ipn': '下贱', 'ans_ipn': 'i'}]
    Routine Fix
    Routine Practic_ipn
    Routine Feedback_ipn_Practice
  LoopTerminator Practice_02
  Routine Instruction04
  LoopInitiator Practice_T1 loopType="TrialHandler"
    conditionsFile = Loop/Practice_t1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_t1': '我', 'ans_t1': 'e'},
      {'Words_t1': '我的', 'ans_t1': 'e'},
      {'Words_t1': '我们', 'ans_t1': 'e'},
      {'Words_t1': '自己', 'ans_t1': 'e'},
      {'Words_t1': '俺', 'ans_t1': 'e'},
      {'Words_t1': '他', 'ans_t1': 'i'},
      {'Words_t1': '他们', 'ans_t1': 'i'},
      {'Words_t1': '他的', 'ans_t1': 'i'},
      {'Words_t1': '他人', 'ans_t1': 'i'},
      {'Words_t1': '其他', 'ans_t1': 'i'},
      {'Words_t1': '优秀', 'ans_t1': 'e'},
      {'Words_t1': '崇高', 'ans_t1': 'e'},
      {'Words_t1': '出门', 'ans_t1': 'e'},
      {'Words_t1': '杰出', 'ans_t1': 'e'},
      {'Words_t1': '乐观', 'ans_t1': 'e'},
      {'Words_t1': '诚实', 'ans_t1': 'e'},
      {'Words_t1': '正直', 'ans_t1': 'e'},
      {'Words_t1': '勇敢', 'ans_t1': 'e'},
      {'Words_t1': '勤奋', 'ans_t1': 'e'},
      {'Words_t1': '机智', 'ans_t1': 'e'},
      {'Words_t1': '认真', 'ans_t1': 'e'},
      {'Words_t1': '稳重', 'ans_t1': 'e'},
      {'Words_t1': '无私', 'ans_t1': 'e'},
      {'Words_t1': '公正', 'ans_t1': 'e'},
      {'Words_t1': '朴实', 'ans_t1': 'e'},
      {'Words_t1': '细腻', 'ans_t1': 'e'},
      {'Words_t1': '冷静', 'ans_t1': 'e'},
      {'Words_t1': '热情', 'ans_t1': 'e'},
      {'Words_t1': '活泼', 'ans_t1': 'e'},
      {'Words_t1': '诚恳', 'ans_t1': 'e'},
      {'Words_t1': '卑鄙', 'ans_t1': 'i'},
      {'Words_t1': '虚伪', 'ans_t1': 'i'},
      {'Words_t1': '愚蠢', 'ans_t1': 'i'},
      {'Words_t1': '刻薄', 'ans_t1': 'i'},
      {'Words_t1': '悲观', 'ans_t1': 'i'},
      {'Words_t1': '消极', 'ans_t1': 'i'},
      {'Words_t1': '自卑', 'ans_t1': 'i'},
      {'Words_t1': '傲慢', 'ans_t1': 'i'},
      {'Words_t1': '鲁莽', 'ans_t1': 'i'},
      {'Words_t1': '冒失', 'ans_t1': 'i'},
      {'Words_t1': '执拗', 'ans_t1': 'i'},
      {'Words_t1': '散漫', 'ans_t1': 'i'},
      {'Words_t1': '凶狠', 'ans_t1': 'i'},
      {'Words_t1': '自私', 'ans_t1': 'i'},
      {'Words_t1': '暴躁', 'ans_t1': 'i'}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
    Routine Fix
    Routine Practice_t1
    Routine Feedback_t1
  LoopTerminator Practice_T1
  Routine Instruction05
  LoopInitiator Formal_T1 loopType="TrialHandler"
    conditionsFile = Loop/Practice_t1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_t1': '我', 'ans_t1': 'e'},
      {'Words_t1': '我的', 'ans_t1': 'e'},
      {'Words_t1': '我们', 'ans_t1': 'e'},
      {'Words_t1': '自己', 'ans_t1': 'e'},
      {'Words_t1': '俺', 'ans_t1': 'e'},
      {'Words_t1': '他', 'ans_t1': 'i'},
      {'Words_t1': '他们', 'ans_t1': 'i'},
      {'Words_t1': '他的', 'ans_t1': 'i'},
      {'Words_t1': '他人', 'ans_t1': 'i'},
      {'Words_t1': '其他', 'ans_t1': 'i'},
      {'Words_t1': '优秀', 'ans_t1': 'e'},
      {'Words_t1': '崇高', 'ans_t1': 'e'},
      {'Words_t1': '聪明', 'ans_t1': 'e'},
      {'Words_t1': '杰出', 'ans_t1': 'e'},
      {'Words_t1': '乐观', 'ans_t1': 'e'},
      {'Words_t1': '诚实', 'ans_t1': 'e'},
      {'Words_t1': '正直', 'ans_t1': 'e'},
      {'Words_t1': '勇敢', 'ans_t1': 'e'},
      {'Words_t1': '勤奋', 'ans_t1': 'e'},
      {'Words_t1': '机智', 'ans_t1': 'e'},
      {'Words_t1': '认真', 'ans_t1': 'e'},
      {'Words_t1': '稳重', 'ans_t1': 'e'},
      {'Words_t1': '无私', 'ans_t1': 'e'},
      {'Words_t1': '公正', 'ans_t1': 'e'},
      {'Words_t1': '朴实', 'ans_t1': 'e'},
      {'Words_t1': '细腻', 'ans_t1': 'e'},
      {'Words_t1': '冷静', 'ans_t1': 'e'},
      {'Words_t1': '热情', 'ans_t1': 'e'},
      {'Words_t1': '活泼', 'ans_t1': 'e'},
      {'Words_t1': '诚恳', 'ans_t1': 'e'},
      {'Words_t1': '卑鄙', 'ans_t1': 'i'},
      {'Words_t1': '虚伪', 'ans_t1': 'i'},
      {'Words_t1': '愚蠢', 'ans_t1': 'i'},
      {'Words_t1': '刻薄', 'ans_t1': 'i'},
      {'Words_t1': '悲观', 'ans_t1': 'i'},
      {'Words_t1': '消极', 'ans_t1': 'i'},
      {'Words_t1': '自卑', 'ans_t1': 'i'},
      {'Words_t1': '傲慢', 'ans_t1': 'i'},
      {'Words_t1': '鲁莽', 'ans_t1': 'i'},
      {'Words_t1': '冒失', 'ans_t1': 'i'},
      {'Words_t1': '执拗', 'ans_t1': 'i'},
      {'Words_t1': '散漫', 'ans_t1': 'i'},
      {'Words_t1': '凶狠', 'ans_t1': 'i'},
      {'Words_t1': '自私', 'ans_t1': 'i'},
      {'Words_t1': '暴躁', 'ans_t1': 'i'}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
    Routine Fix
    Routine Practice_t1
    Routine Feedback_t1
  LoopTerminator Formal_T1
  Routine Instruction06
  LoopInitiator Practice_iso_Reverse loopType="TrialHandler"
    conditionsFile = Loop/Practice_iso _reverse.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': '我', 'ans': 'i'},
      {'Words': '我的', 'ans': 'i'},
      {'Words': '我们', 'ans': 'i'},
      {'Words': '自己', 'ans': 'i'},
      {'Words': '俺', 'ans': 'i'},
      {'Words': '他', 'ans': 'e'},
      {'Words': '他们', 'ans': 'e'},
      {'Words': '他的', 'ans': 'e'},
      {'Words': '他人', 'ans': 'e'},
      {'Words': '其他', 'ans': 'e'}]
    Routine Fix
    Routine Practice_iso_reverse
    Routine Feedback_iso_reverse
  LoopTerminator Practice_iso_Reverse
  Routine Instruction07
  LoopInitiator Practice_t2_Reverse loopType="TrialHandler"
    conditionsFile = Loop/Practice_t2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words_t2': '我', 'ans_t2': 'i'},
      {'Words_t2': '我的', 'ans_t2': 'i'},
      {'Words_t2': '我们', 'ans_t2': 'i'},
      {'Words_t2': '自己', 'ans_t2': 'i'},
      {'Words_t2': '俺', 'ans_t2': 'i'},
      {'Words_t2': '他', 'ans_t2': 'e'},
      {'Words_t2': '他们', 'ans_t2': 'e'},
      {'Words_t2': '他的', 'ans_t2': 'e'},
      {'Words_t2': '他人', 'ans_t2': 'e'},
      {'Words_t2': '其他', 'ans_t2': 'e'},
      {'Words_t2': '优秀', 'ans_t2': 'i'},
      {'Words_t2': '崇高', 'ans_t2': 'i'},
      {'Words_t2': '聪明', 'ans_t2': 'i'},
      {'Words_t2': '杰出', 'ans_t2': 'i'},
      {'Words_t2': '乐观', 'ans_t2': 'i'},
      {'Words_t2': '诚实', 'ans_t2': 'i'},
      {'Words_t2': '正直', 'ans_t2': 'i'},
      {'Words_t2': '勇敢', 'ans_t2': 'i'},
      {'Words_t2': '勤奋', 'ans_t2': 'i'},
      {'Words_t2': '机智', 'ans_t2': 'i'},
      {'Words_t2': '认真', 'ans_t2': 'i'},
      {'Words_t2': '稳重', 'ans_t2': 'i'},
      {'Words_t2': '无私', 'ans_t2': 'i'},
      {'Words_t2': '公正', 'ans_t2': 'i'},
      {'Words_t2': '朴实', 'ans_t2': 'i'},
      {'Words_t2': '细腻', 'ans_t2': 'i'},
      {'Words_t2': '冷静', 'ans_t2': 'i'},
      {'Words_t2': '热情', 'ans_t2': 'i'},
      {'Words_t2': '活泼', 'ans_t2': 'i'},
      {'Words_t2': '诚恳', 'ans_t2': 'i'},
      {'Words_t2': '卑鄙', 'ans_t2': 'e'},
      {'Words_t2': '虚伪', 'ans_t2': 'e'},
      {'Words_t2': '愚蠢', 'ans_t2': 'e'},
      {'Words_t2': '刻薄', 'ans_t2': 'e'},
      {'Words_t2': '悲观', 'ans_t2': 'e'},
      {'Words_t2': '消极', 'ans_t2': 'e'},
      {'Words_t2': '自卑', 'ans_t2': 'e'},
      {'Words_t2': '傲慢', 'ans_t2': 'e'},
      {'Words_t2': '鲁莽', 'ans_t2': 'e'},
      {'Words_t2': '冒失', 'ans_t2': 'e'},
      {'Words_t2': '执拗', 'ans_t2': 'e'},
      {'Words_t2': '散漫', 'ans_t2': 'e'},
      {'Words_t2': '凶狠', 'ans_t2': 'e'},
      {'Words_t2': '自私', 'ans_t2': 'e'},
      {'Words_t2': '暴躁', 'ans_t2': 'e'}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
    Routine Fix
    Routine Practice_t2_reverse
    Routine Feedback_ipn_reverse
  LoopTerminator Practice_t2_Reverse
  Routine Instruction08
  LoopInitiator Formal_t2 loopType="TrialHandler"
    conditionsFile = Loop/Practice_t2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Fix
    Routine Practice_t2
    Routine Feedback_t2
  LoopTerminator Formal_t2
