PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [800, 600]
  expName = IAT
  frameRateMsg = Please wait...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  rush = True
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Routines
  Routine IAT_TEST
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    TextboxComponent introduction
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Introduction Here....
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
      text = Pygame 's problem
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Instruction
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    TextboxComponent textbox
      bold = False
      editable = False
      font = "C:\Windows\Fonts\FangSong Regular"
      letterHeight = 50
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = 按空格继续
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine Instruction
  Routine Test
  Routine IAT_TEST
