PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = IAT(test)
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Practice
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  Routine Instruction_Total
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    TextComponent Instruction_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        指导语：

            您好，欢迎参加本次实验。在实验中，您需要根据不同的规则按下相应的键进行分类。请保持专注，并尽量快速、准确地完成每个任务。具体指导将在每个步骤开始前详细说明。请您尽可能认真地作答，我们将依据您在各问卷和按键任务中的作答质量发放报酬。

                                                理解后按 空格 开始实验
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine routine_1
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine Instruction_Total
  Routine routine_1
  Routine Practice
