PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [800, 600]
  expName = IAT
  frameRateMsg = Please wait...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  rush = True
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Routines
  Routine IAT_TEST
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    TextboxComponent introduction
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Why
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
      text = Pygame 's problem
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine IAT_TEST
