PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Ios_practice
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine iso_Practice
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = '你过关!'
                fb_col = 'green'
            else:
                fb_text = '你不过关!'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine Fix
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Loop/Practice_iso.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Words': '我', 'ans': 'e'},
      {'Words': '我的', 'ans': 'e'},
      {'Words': '我们', 'ans': 'e'},
      {'Words': '自己', 'ans': 'e'},
      {'Words': '俺', 'ans': 'e'},
      {'Words': '他', 'ans': 'i'},
      {'Words': '他们', 'ans': 'i'},
      {'Words': '他的', 'ans': 'i'},
      {'Words': '他人', 'ans': 'i'},
      {'Words': '其他', 'ans': 'i'}]
    Routine Fix
    Routine trial
    Routine iso_Practice
  LoopTerminator trials
