PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', '性别': '', '年龄': '', '左/右利手': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [800, 600]
  expName = Number Judge
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        指导语:

            欢迎参加本次实验，这是一个判断数字的实验
                           看到偶数按”f"键
                           看到奇数按”j"键

                   理解后按 空格键 开始实验
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine Ending
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        感谢参与实验，祝生活愉快

        按 空格 键退出试验
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine routine_1
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Number
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $number
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine routine
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = blankTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 1, 'ans': 'f', 'Number': 1},
      {'number': 2, 'ans': 'j', 'Number': 2},
      {'number': 3, 'ans': 'f', 'Number': 3},
      {'number': 4, 'ans': 'j', 'Number': 4},
      {'number': 5, 'ans': 'f', 'Number': 5},
      {'number': 6, 'ans': 'j', 'Number': 6},
      {'number': 7, 'ans': 'f', 'Number': 7},
      {'number': 8, 'ans': 'j', 'Number': 8},
      {'number': 9, 'ans': 'f', 'Number': 9},
      {'number': 10, 'ans': 'j', 'Number': 10}]
    Routine routine_1
    Routine routine
  LoopTerminator trials
  Routine Ending
