PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SMT
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Intro
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    TextComponent Intro_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        这是指导语
        ○代表自我
        ▲代表他人
    KeyboardComponent key_resp_Intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fix
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine trial
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    ImageComponent image
      image [set every repeat] = $Shape
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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    TextComponent Identity
      letterHeight = 0.05
      pos = (0, -50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $Words
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  Routine End
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 这是结束语
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    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine Intro
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Stim/blankTemplate1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Shape': 'Stim/Circle.png', 'Words': '自我', 'ans': 'f'},
      {'Shape': 'Stim/Triangle.png', 'Words': '他人', 'ans': 'j'}]
    Routine Fix
    Routine trial
    Routine Feedback
  LoopTerminator Practice
  LoopInitiator Formal loopType="TrialHandler"
    conditionsFile = Stim/blankTemplate1.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'Shape': 'Stim/Circle.png', 'Words': '自我', 'ans': 'f'},
      {'Shape': 'Stim/Triangle.png', 'Words': '他人', 'ans': 'j'}]
    Routine Fix
    Routine trial
  LoopTerminator Formal
  Routine End
